OSMAPOSLParameters :=

    objective function type:= PoissonLogLikelihoodWithLinearModelForMeanAndProjData
    PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=

        input file := input.hs

        projector pair type := SPECTGPU
              Projector Pair Using SPECTGPU Parameters :=
                  ; width of PSF

                  ;PSF type of correction {  3D  }
                  ;
                  ; These values are mostly dependent on your collimator.
                  ; the PSF is modelled as a Gaussian with sigma dependent on the distance from the collimator
                  ; sigma_at_depth = collimator_slope * depth_in_cm + collimator sigma 0(cm)
                  collimator slope := 0.0163
                  collimator sigma 0(cm) := 0.1466

                  attenuation image filename := attMapRec.hv

         End Projector Pair Using SPECTGPU Parameters :=

    end PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=

    initial estimate:= init.hv
    output filename prefix := out/OSEM_3DPSF

    number of subsets:= 12
    number of subiterations:= 4
    Save estimates at subiteration intervals:= 4


END :=
